<PlusConfiguration version="2.7">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Profile only)"
      Description="Broadcasting tracking data through OpenIGTLink."/>
    <Device
      Id="TrackerDevice"
      Type="FakeTracker"
      ToolReferenceFrame="Tracker"
      Mode="PivotCalibration">
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" PortName="0" />
        <DataSource Type="Tool" Id="Reference" PortName="1"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
        <Transform Name="ReferenceToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
